s:Ge/World/Material  = "Vacuum"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/Phantom/Type     = "TsBox"
s:Ge/Phantom/Parent   = "World"
s:Ge/Phantom/Material = "Air"
d:Ge/Phantom/HLX      = 30.0 cm
d:Ge/Phantom/HLY      = 30.0 cm
d:Ge/Phantom/HLZ      = 10.0 cm
d:Ge/Phantom/TransZ   = -30. cm
s:Ge/Phantom/Color    = "blue"

s:Sc/DoseAtPhantom/Quantity                  = "DoseToMedium"
s:Sc/DoseAtPhantom/Component                 = "Phantom"
b:Sc/DoseAtPhantom/OutputToConsole           = "TRUE"
s:Sc/DoseAtPhantom/IfOutputFileAlreadyExists = "Overwrite"

s:Gr/ViewA/Type                            = "OpenGL"
i:Gr/ViewA/WindowSizeX                      = 900
i:Gr/ViewA/WindowSizeY                      = 900
d:Gr/ViewA/Theta                            = 55 deg
d:Gr/ViewA/Phi                              = 20 deg
s:Gr/ViewA/Projection                       = "Perspective"
d:Gr/ViewA/PerspectiveAngle                 = 30 deg
u:Gr/ViewA/Zoom                             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "World"
sc:So/Example/BeamParticle             = "proton"
dc:So/Example/BeamEnergy               = 169.23 MeV
sc:So/Example/BeamPositionDistribution = "None"
sc:So/Example/BeamAngularDistribution  = "Flat"
ic:So/Example/NumberOfHistoriesInRun   = 100
dc:So/Example/BeamAngularCutoffX = 10. deg # X cutoff of angular distrib (if Flat or Gaussian)
dc:So/Example/BeamAngularCutoffY = 10. deg # Y cutoff of angular distrib (if Flat or Gaussian)



i:Ts/ShowHistoryCountAtInterval = 1
i:Ts/NumberOfThreads = 1

b:Ts/UseQt = "True"
b:Ts/PauseBeforeQuit = "True"
